PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Flanker Test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent stim
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $flankers
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    KeyboardComponent resp
      allowedKeys = 'left','right',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = “Press LEFT for < and RIGHT for >. Press SPACE to start.”
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = flanker_conditions_100_shuffled.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '<<><<'), ('target', '<'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '<<><<'), ('target', '<'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '<<><<'), ('target', '<'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '>>>>>'), ('target', '>'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '<<<<<'), ('target', '<'), ('congruency', 'congruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')]),
      OrderedDict([('flankers', '>><>>'), ('target', '>'), ('congruency', 'incongruent')])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
    Routine trial
  LoopTerminator trials
