PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = delay_discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $"GBP" + str(reward_today) + " today " + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days "
    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Delay_discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 10, 'future_reward': 90, 'delay': 39},
      {'reward_today': 79, 'future_reward': 70, 'delay': 23},
      {'reward_today': 29, 'future_reward': 20, 'delay': 124},
      {'reward_today': 50, 'future_reward': 45, 'delay': 56},
      {'reward_today': 52, 'future_reward': 15, 'delay': 78},
      {'reward_today': 93, 'future_reward': 65, 'delay': 93},
      {'reward_today': 94, 'future_reward': 85, 'delay': 127},
      {'reward_today': 68, 'future_reward': 105, 'delay': 192},
      {'reward_today': 12, 'future_reward': 95, 'delay': 28},
      {'reward_today': 47, 'future_reward': 100, 'delay': 109},
      {'reward_today': 34, 'future_reward': 10, 'delay': 34},
      {'reward_today': 53, 'future_reward': 25, 'delay': 12},
      {'reward_today': 27, 'future_reward': 94, 'delay': 11},
      {'reward_today': 40, 'future_reward': 68, 'delay': 15},
      {'reward_today': 49, 'future_reward': 12, 'delay': 27},
      {'reward_today': 67, 'future_reward': 47, 'delay': 40},
      {'reward_today': 78, 'future_reward': 34, 'delay': 49},
      {'reward_today': 10, 'future_reward': 53, 'delay': 67},
      {'reward_today': 29, 'future_reward': 27, 'delay': 78},
      {'reward_today': 50, 'future_reward': 40, 'delay': 10}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
    Routine trial
  LoopTerminator trials
