PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = word priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Type here...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'L_pt_p', 'Reference': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test_word': 'T_hi_t', 'Reference': 'T-shirt', 'old_new': 'old'},
      {'test_word': '_o_se', 'Reference': 'Mouse', 'old_new': 'old'},
      {'test_word': 'P_st_y', 'Reference': 'Pastry', 'old_new': 'old'},
      {'test_word': 'c_se', 'Reference': 'Case', 'old_new': 'old'},
      {'test_word': '_ru_se', 'Reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'P_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test_word': 'Ke_s', 'Reference': 'keys', 'old_new': 'old'},
      {'test_word': 'P_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test_word': 'B_a_d', 'Reference': 'Board', 'old_new': 'old'},
      {'test_word': 'M_us_', 'Reference': 'Mouse', 'old_new': 'new'},
      {'test_word': 'Ma_b_e', 'Reference': 'Marble', 'old_new': 'old'},
      {'test_word': 'P_on_', 'Reference': 'Phone', 'old_new': 'old'},
      {'test_word': 'B__k', 'Reference': 'Book', 'old_new': 'old'},
      {'test_word': '_us_io_', 'Reference': 'Cushion', 'old_new': 'old'},
      {'test_word': 'T_bl_', 'Reference': 'Table', 'old_new': 'new'},
      {'test_word': 'P_nc_l', 'Reference': 'Pencil', 'old_new': 'new'},
      {'test_word': 'v_se', 'Reference': 'Vase', 'old_new': 'old'},
      {'test_word': 'B_tt_e', 'Reference': 'Bottle', 'old_new': 'new'},
      {'test_word': 'C_m_ra', 'Reference': 'Camera', 'old_new': 'new'},
      {'test_word': 'Sl_e_e', 'Reference': 'Sleeve', 'old_new': 'new'},
      {'test_word': 'R_ng', 'Reference': 'Ring', 'old_new': 'new'}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
    Routine test
  LoopTerminator trials_2
